PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = untitled
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task you will be required to press space if the white square appeared in the same location as the location on the last trial. For example if the square was in the left down corner on trial 1 and then it appeared in the same location on trial 2, press space. Otherwise, do not respond. Press space to continue.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
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    TextComponent fixation_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine End
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    TextComponent thank_you
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.
        Thank you for your time.
  Routine N_back_1_Trial
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    ImageComponent grid_lines
      image = grid
      size = (0.6, 0.6)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    PolygonComponent target_square
      fillColor = $[1.000,1.000,1.000]
      pos [set every repeat] = $location
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent fixation_2
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent response
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine Instructions_2
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    TextComponent instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of N-back-1 trials. You are about to start N-back-2 trials. This means that instead of pressing space whenever the square appears in the same position as on the position on one trial before, you are required to press space whenever the square appears in the same position as on the position two trials before. For example if the square appeared in left down corner on trial 1, you should press space if the square appears in the left down corner on trial 3. Press space to continue.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine N_back_2_trials
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    ImageComponent grid_lines_2
      image = grid
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent target_square_2
      fillColor = $[1.000,1.000,1.000]
      pos [set every repeat] = $location
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    TextComponent fixation_3
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = +
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    KeyboardComponent response_2
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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Flow
  Routine Instructions
  Routine Fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = N-back-1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('square', 6), ('location', [0.2, 0]), ('corrAns', None)]),
      OrderedDict([('square', 6), ('location', [0.2, 0]), ('corrAns', 'space')]),
      OrderedDict([('square', 2), ('location', [0, 0.2]), ('corrAns', None)]),
      OrderedDict([('square', 9), ('location', [0.2, -0.2]), ('corrAns', None)]),
      OrderedDict([('square', 9), ('location', [0.2, -0.2]), ('corrAns', 'space')]),
      OrderedDict([('square', 6), ('location', [0.2, 0]), ('corrAns', None)]),
      OrderedDict([('square', 4), ('location', [-0.2, 0]), ('corrAns', None)]),
      OrderedDict([('square', 3), ('location', [0.2, 0.2]), ('corrAns', None)]),
      OrderedDict([('square', 3), ('location', [0.2, 0.2]), ('corrAns', 'space')]),
      OrderedDict([('square', 8), ('location', [0, -0.2]), ('corrAns', None)]),
      OrderedDict([('square', 1), ('location', [-0.2, 0.2]), ('corrAns', None)]),
      OrderedDict([('square', 2), ('location', [0, 0.2]), ('corrAns', None)]),
      OrderedDict([('square', 4), ('location', [-0.2, 0]), ('corrAns', None)]),
      OrderedDict([('square', 4), ('location', [-0.2, 0]), ('corrAns', 'space')]),
      OrderedDict([('square', 8), ('location', [0, -0.2]), ('corrAns', None)]),
      OrderedDict([('square', 5), ('location', [0, 0]), ('corrAns', None)]),
      OrderedDict([('square', 5), ('location', [0, 0]), ('corrAns', 'space')]),
      OrderedDict([('square', 1), ('location', [-0.2, 0.2]), ('corrAns', None)]),
      OrderedDict([('square', 3), ('location', [0.2, 0.2]), ('corrAns', None)]),
      OrderedDict([('square', 6), ('location', [0.2, 0]), ('corrAns', None)])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
    Routine N_back_1_Trial
  LoopTerminator trials
  Routine Instructions_2
  Routine Fixation
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = N-back-2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('location', [0, 0]), ('corrAns', None)]),
      OrderedDict([('location', [0, 0.2]), ('corrAns', None)]),
      OrderedDict([('location', [0.2, 0]), ('corrAns', None)]),
      OrderedDict([('location', [0.2, -0.2]), ('corrAns', None)]),
      OrderedDict([('location', [0.2, 0.2]), ('corrAns', None)]),
      OrderedDict([('location', [0.2, -0.2]), ('corrAns', 'space')]),
      OrderedDict([('location', [-0.2, -0.2]), ('corrAns', None)]),
      OrderedDict([('location', [-0.2, 0.2]), ('corrAns', None)]),
      OrderedDict([('location', [0, 0]), ('corrAns', None)]),
      OrderedDict([('location', [-0.2, -0.2]), ('corrAns', None)]),
      OrderedDict([('location', [0, 0]), ('corrAns', 'space')]),
      OrderedDict([('location', [0.2, 0]), ('corrAns', None)]),
      OrderedDict([('location', [0.2, 0.2]), ('corrAns', None)]),
      OrderedDict([('location', [0.2, 0]), ('corrAns', 'space')]),
      OrderedDict([('location', [0, -0.2]), ('corrAns', None)]),
      OrderedDict([('location', [0.2, -0.2]), ('corrAns', None)]),
      OrderedDict([('location', [0.2, -0.2]), ('corrAns', None)]),
      OrderedDict([('location', [-0.2, 0.2]), ('corrAns', None)]),
      OrderedDict([('location', [0.2, 0.2]), ('corrAns', None)]),
      OrderedDict([('location', [0, 0]), ('corrAns', None)]),
      OrderedDict([('location', [0.2, 0.2]), ('corrAns', 'space')]),
      OrderedDict([('location', [-0.2, 0]), ('corrAns', None)]),
      OrderedDict([('location', [-0.2, -0.2]), ('corrAns', None)]),
      OrderedDict([('location', [-0.2, 0]), ('corrAns', 'space')]),
      OrderedDict([('location', [-0.2, 0]), ('corrAns', None)])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
    Routine N_back_2_trials
  LoopTerminator trials_2
  Routine End
