PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  colPriority = {'thisRow.t': 'priority.CRITICAL', 'expName': 'priority.LOW', 'Condition': '35', 'Score': '34', 'marker': '33'}
  color = $[-.67,-.67,-.67]
  expName = trail-making
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine setup
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    CodeComponent JSCode
      Code Type = Both
      Begin Experiment:
        white = [.9, .9, .9]
        green = [-.5, .5, -.5]
      Begin JS Experiment:
        document.documentElement.style.cursor = 'none';
        white = new util.Color([.9, .9, .9]);
        green = new util.Color([(-.5), .5, (-.5)]);
      End JS Experiment:
        document.documentElement.style.cursor = 'auto';
    CodeComponent setupCode
      Code Type = Auto->JS
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      Begin Experiment:
        # Maximum number of targets is the length of these two arrays
        # posArray1 contains the x coordinates and posArray2 the y coordinates
        #posArray1 = [-0.05,-0.1,-0.15,-0.2,-0.25,-0.3,-0.35,-0.4,0.05,0.1,0.15,0.2,0.25,0.3,0.35,0.4]
        #posArray2 = [-0.05,-0.1,-0.15,-0.2,-0.25,-0.3,-0.35,-0.4,0.05,0.1,0.15,0.2,0.25,0.3,0.35,0.4]
        alphabet = 'ABCDEFGHIJKLMNOPQRSTUVWXYZ'
        fontColor = [.9 , .9, .9]
        # Set up target text and circles
        trialText = []
        trialTargets = []
        for Idx in range(25):
            trialText.append(visual.TextStim(win=win,
            name='trialText'+str(Idx),
            text=' ',
            font='Arial',
            pos=(0, 0),
            height=0.06, wrapWidth=None, ori=0,
            color=white))
            trialTargets.append(visual.Polygon(
            win=win,
            name="target",
            fillColor=white,
            lineColor=white,
            edges=36,
            pos=(0, 0),
            opacity = .25,
            size=.1
            ))
        myClock = core.Clock()
  Routine instr
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    CodeComponent code_instr
      Code Type = Auto->JS
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      Begin Routine:
        # Customise the instructions with the current target list
        msg = ''
        targetList = []
        for Idx in range(Numbers):
            msg += str(Idx+1) + ', '
            targetList.append(str(Idx+1))
            if Letters:
                msg += alphabet[Idx] + ', '
                targetList.append(alphabet[Idx])
        msg = msg[:-2]

        thisExp.addData('Condition',Condition)
      Each Frame:
        if clickHere.contains(mouse):
            continueRoutine = False
    TextComponent instrText
      color = $fontColor
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Connect the circles in order as quickly as possible.\nThe order is:\n' + msg + '.\n\nclick on the green circle to continue.'
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    MouseComponent mouse
      clickable = clickHere
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    PolygonComponent clickHere
      fillColor = lightgreen
      lineColor = lightgreen
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        # The mouse position can't be set online
        # trialMouse.pos = (1.5,1.5)
        trialCursor.pos = (0,0)

        # Shuffle targetlocations
        #shuffle(posArray1)
        #shuffle(posArray2)

        # Set target
        print('len(targetList)',len(targetList))
        for Idx in range(len(targetList)):
            #trialTargets[Idx].setColor(white)
            #trialTargets[Idx].setOpacity(.25)
            trialTargets[Idx].setPos([posArray1[Idx]/1000-.5,.5-posArray2[Idx]/1000])
            trialTargets[Idx].setAutoDraw(True)
            trialText[Idx].setPos([posArray1[Idx]/1000-.5,.5-posArray2[Idx]/1000])
            trialText[Idx].text=targetList[Idx]
            trialText[Idx].setColor(white)
            trialText[Idx].setAutoDraw(True)
        trialStep = 0
        shapeList = []
      Each Frame:
        if myClock.getTime() > 600:
            continueRoutine = False
            trials.finished = True
        CursorTargetDistance = sqrt((trialCursor.pos[0]-trialTargets[trialStep].pos[0])**2 + (trialCursor.pos[1]-trialTargets[trialStep].pos[1])**2)
        if (CursorTargetDistance < .05):
            # trialTargets[trialStep].setOpacity(0)
            #trialTargets[trialStep].setColor(green)
            trialText[trialStep].setColor(green)
            #trialTargets[trialStep].setOpacity(.05)
            if trialStep > 0:
                # Create new line
                shapeList.append(visual.ShapeStim(
                win=win, name="line"+str(trialStep),
                lineColor=white,
                lineWidth=2,
                vertices=[[posArray1[trialStep-1]/1000-.5,.5-posArray2[trialStep-1]/1000],[posArray1[trialStep]/1000-.5,.5-posArray2[trialStep]/1000]],
                ))
                shapeList[-1].setAutoDraw(True)
            thisExp.addData('RTstep'+str(trialStep),round(t*1000))
            trialStep += 1
            # End routine when last target located
            if trialStep == len(targetList):
                continueRoutine = False
                thisExp.addData('Score',round(t))
      End Routine:
        # Hide targets and lines ready for next trial
        for Idx in range(len(targetList)):
            trialTargets[Idx].setAutoDraw(False)
            trialText[Idx].setAutoDraw(False)
        for Idx in range(len(shapeList)):
            shapeList[Idx].setAutoDraw(False)
    MouseComponent trialMouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    PolygonComponent trialCursor
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every frame] = (trialMouse.getPos()[0], trialMouse.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent thx_text
      color = $fontColor
      letterHeight = .05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Fin
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Flow
  Routine setup
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Condition': 'Sample A', 'Numbers': 8, 'Letters': 0, 'posArray1': [545, 630, 857, 725, 787, 209, 97, 390], 'posArray2': [369, 144, 279, 343, 524, 480, 255, 245]},
      {'Condition': 'A', 'Numbers': 25, 'Letters': 0, 'posArray1': [621, 477, 713, 733, 458, 589, 408, 181, 235, 340, 456, 63, 137, 56, 54, 152, 329, 392, 639, 456, 525, 914, 946, 833, 800], 'posArray2': [720, 832, 836, 376, 489, 590, 655, 819, 912, 821, 939, 945, 526, 614, 119, 285, 58, 287, 209, 196, 57, 148, 912, 517, 939]},
      {'Condition': 'Sample B', 'Numbers': 4, 'Letters': 1, 'posArray1': [543, 634, 857, 722, 785, 211, 102, 392], 'posArray2': [366, 145, 276, 340, 523, 479, 257, 222]},
      {'Condition': 'B', 'Numbers': 12, 'Letters': 1, 'posArray1': [510, 702, 362, 458, 573, 702, 702, 848, 846, 781, 536, 301, 235, 152, 122, 264, 266, 621, 929, 876, 927, 72, 56, 170], 'posArray2': [440, 747, 718, 185, 305, 521, 139, 152, 582, 824, 798, 888, 446, 568, 60, 274, 126, 47, 58, 680, 912, 939, 492, 742]}]
    Routine instr
    Routine trial
  LoopTerminator trials
  Routine thanks
