PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['continue.png', 'images/4blueTriangles.jpg', 'images/1blueCross.jpg', 'images/1blueDot.jpg', 'images/1blueStar.jpg', 'images/1blueTriangle.jpg', 'images/1greenCross.jpg', 'images/1greenDot.jpg', 'images/1greenStar.jpg', 'images/1greenTriangle.jpg', 'images/1redCross.jpg', 'images/1redDot.jpg', 'images/1redStar.jpg', 'images/1redTriangle.jpg', 'images/1yellowCross.jpg', 'images/1yellowDot.jpg', 'images/1yellowStar.jpg', 'images/1yellowTriangle.jpg', 'images/2blueCrosses.jpg', 'images/2blueDots.jpg', 'images/2blueStars.jpg', 'images/2blueTriangles.jpg', 'images/2greenCrosses.jpg', 'images/2greenDots.jpg', 'images/2greenStars.jpg', 'images/2greenTriangles.jpg', 'images/2redCrosses.jpg', 'images/2redDots.jpg', 'images/2redStars.jpg', 'images/2redTriangles.jpg', 'images/2yellowCrosses.jpg', 'images/2yellowDots.jpg', 'images/2yellowStars.jpg', 'images/2yellowTriangles.jpg', 'images/3blueCrosses.jpg', 'images/3blueDots.jpg', 'images/3blueStars.jpg', 'images/3blueTriangles.jpg', 'images/3greenCrosses.jpg', 'images/3greenDots.jpg', 'images/3greenStars.jpg', 'images/3greenTriangles.jpg', 'images/3redCrosses.jpg', 'images/3redDots.jpg', 'images/3redStars.jpg', 'images/3redTriangles.jpg', 'images/3yellowCrosses.jpg', 'images/3yellowDots.jpg', 'images/3yellowStars.jpg', 'images/3yellowTriangles.jpg', 'images/4blueCrosses.jpg', 'images/4blueDots.jpg', 'images/4blueStars.jpg', 'images/4greenCrosses.jpg', 'images/4greenDots.jpg', 'images/4greenStars.jpg', 'images/4greenTriangles.jpg', 'images/4redCrosses.jpg', 'images/4redDots.jpg', 'images/4redStars.jpg', 'images/4redTriangles.jpg', 'images/4yellowCrosses.jpg', 'images/4yellowDots.jpg', 'images/4yellowStars.jpg', 'images/4yellowTriangles.jpg', 'chooseRule.xlsx', 'colour.xlsx', 'example.jpg', 'number.xlsx', 'shape.xlsx']
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Wisconsin Card Sorting Task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task you will be required to sort the presented cards based on a rule i.e. the cards will have to be sorted based on either colour, shape or number. The rule will not be presented, however you will receive feedback on each trial. After a certain amount of trials the rule will change to a different one. To select your response click on one of the four cards presented at the top of the screen. 
      wrapWidth = .9
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    ImageComponent continue_button
      image = continue.png
      pos = (0, -.4)
      size = (0.65, .1)
      startVal [time (s)] = 1
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    MouseComponent mouse_2
      clickable = continue_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 1
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  Routine Trials
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    CodeComponent response_code
      Code Type = Auto->JS
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      Begin Routine:
        corr = 0
        rt = 0
        print('card',card)
        print('corrAns',corrAns)
      Each Frame:
        # RT more accurate in Each Frame
        rt = round(t*1000)
      End Routine:
        if response.clicked_name == corrAns:
            corr = 1
        # clicked_name seems to fail on mobile so:
        elif one_red_dot.contains(response) and corrAns == 'one_red_dot':
            corr = 1
        elif two_yellow_triangles.contains(response) and corrAns == 'two_yellow_triangles':
            corr = 1
        elif three_green_crosses.contains(response) and corrAns == 'three_green_crosses':
            corr = 1
        elif four_blue_stars.contains(response) and corrAns == 'four_blue_stars':
            corr = 1

        print('Response',response.clicked_name)
        thisExp.addData('Score', corr)
        thisExp.addData('RT', rt)
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent one_red_dot
      image = images/1redDot.jpg
      pos = (-0.375, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent two_yellow_triangles
      image = images/2yellowTriangles.jpg
      pos = (-0.125, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent three_green_crosses
      image = images/3greenCrosses.jpg
      pos = (0.125, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent four_blue_stars
      image = images/4blueStars.jpg
      pos = (0.375, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent trial_card
      image [set every repeat] = $card
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 1
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    MouseComponent response
      clickable = one_red_dot, two_yellow_triangles, three_green_crosses, four_blue_stars
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 1
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  Routine Feedback
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ''
      Begin Routine:
        if corr == 1:
            msg="Correct! "
        else:
            msg="Incorrect"
      End Routine:
        if trials.thisTrialN == 6:
            trials.finished = True
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine End
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    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.
        Thank you for your time.
  Routine Example
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    TextComponent example_text
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = For example, you may see a screen like this:
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    ImageComponent example_image
      image = example.jpg
      pos = (0, 0.15)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent example_text_2
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = The presented card (bottom centre) can be categorised based on shape (dots), colour (yellow) or number (three). Click on the first card if you want to categorise it by the shape, second if you want categorise it by colour and third if you want to categorise it by number. After you select your response, feedback will be provided. Click on the image to start the experiment.
      wrapWidth = .9
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    MouseComponent mouse
      clickable = example_image
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 1
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Flow
  Routine Instructions
  Routine Example
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = chooseRule.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'useRows': '0:64'},
      {'useRows': '64:128'},
      {'useRows': '128:192'}]
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $useRows
      conditionsFile = cards.xlsx
      loopType = random
      nReps = 192
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      conditions:
        [{'rule': 'colour', 'card': 'images/1blueCross.jpg', 'corrAns': 'four_blue_stars'},
        {'rule': 'colour', 'card': 'images/1blueDot.jpg', 'corrAns': 'four_blue_stars'},
        {'rule': 'colour', 'card': 'images/1blueStar.jpg', 'corrAns': 'four_blue_stars'},
        {'rule': 'colour', 'card': 'images/1blueTriangle.jpg', 'corrAns': 'four_blue_stars'},
        {'rule': 'colour', 'card': 'images/1greenCross.jpg', 'corrAns': 'three_green_crosses'},
        {'rule': 'colour', 'card': 'images/1greenDot.jpg', 'corrAns': 'three_green_crosses'},
        {'rule': 'colour', 'card': 'images/1greenStar.jpg', 'corrAns': 'three_green_crosses'},
        {'rule': 'colour', 'card': 'images/1greenTriangle.jpg', 'corrAns': 'three_green_crosses'},
        {'rule': 'colour', 'card': 'images/1redCross.jpg', 'corrAns': 'one_red_dot'},
        {'rule': 'colour', 'card': 'images/1redDot.jpg', 'corrAns': 'one_red_dot'},
        {'rule': 'colour', 'card': 'images/1redStar.jpg', 'corrAns': 'one_red_dot'},
        {'rule': 'colour', 'card': 'images/1redTriangle.jpg', 'corrAns': 'one_red_dot'},
        {'rule': 'colour', 'card': 'images/1yellowCross.jpg', 'corrAns': 'two_yellow_triangles'},
        {'rule': 'colour', 'card': 'images/1yellowDot.jpg', 'corrAns': 'two_yellow_triangles'},
        {'rule': 'colour', 'card': 'images/1yellowStar.jpg', 'corrAns': 'two_yellow_triangles'},
        {'rule': 'colour', 'card': 'images/1yellowTriangle.jpg', 'corrAns': 'two_yellow_triangles'},
        {'rule': 'colour', 'card': 'images/2blueCrosses.jpg', 'corrAns': 'four_blue_stars'},
        {'rule': 'colour', 'card': 'images/2blueDots.jpg', 'corrAns': 'four_blue_stars'}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
      Routine Trials
      Routine Feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine End
